PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Main
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Routines
  Routine trial
    ImageComponent primeImage
      image [set every repeat] = $primeStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    PolygonComponent blankSection
      fillColor = white
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 0.125
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    ImageComponent targetImage
      image [set every repeat] = $targetStim
      size = (0.5, 0.5)
      startVal [time (s)] = 0.225
      stopVal [duration (s)] = 0.125
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    NoiseStimComponent responseSection
      filter = None
      imageComponent = Phase
      interpolate = nearest
      noiseBW = 1
      noiseBWO = 30
      noiseBaseSf = 8.0
      noiseClip = 3.0
      noiseElementSize = 0.0625
      noiseFilterLower = 1.0
      noiseFilterOrder = 0.0
      noiseFilterUpper = 8.0
      noiseFractalPower = 0.0
      noiseImage = None
      noiseNewSample = None
      noiseNewSampleWhen = 1
      noiseOri = 0.0
      noiseType = Uniform
      sf = None
      size = (0.5, 0.5)
      startVal [time (s)] = 0.350
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    KeyboardComponent responseKeyboard
      allowedKeys = 'e','i'
      forceEndRoutine = True
      startVal [time (s)] = 0.350
      store = first key
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Images.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('primeStim', 'Primes/C-1.jpg'), ('targetStim', 'Targets/T (1).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-2.jpg'), ('targetStim', 'Targets/T (2).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-3.jpg'), ('targetStim', 'Targets/T (3).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-4.jpg'), ('targetStim', 'Targets/T (4).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-5.jpg'), ('targetStim', 'Targets/T (5).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-6.jpg'), ('targetStim', 'Targets/T (6).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-7.jpg'), ('targetStim', 'Targets/T (7).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-8.jpg'), ('targetStim', 'Targets/T (8).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-9.jpg'), ('targetStim', 'Targets/T (9).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-10.jpg'), ('targetStim', 'Targets/T (10).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-1.jpg'), ('targetStim', 'Targets/T (11).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-2.jpg'), ('targetStim', 'Targets/T (12).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-3.jpg'), ('targetStim', 'Targets/T (13).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-4.jpg'), ('targetStim', 'Targets/T (14).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-5.jpg'), ('targetStim', 'Targets/T (15).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-6.jpg'), ('targetStim', 'Targets/T (16).BMP')]),
      OrderedDict([('primeStim', 'Primes/C-7.jpg'), ('targetStim', 'Targets/T (17).BMP')])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
    Routine trial
  LoopTerminator trials
